<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Operation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enable</harp:Heartbeat>
                <harp:IgnoreErrors>true</harp:IgnoreErrors>
                <harp:PortName>COM12</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>GoToPosition</rx:Name>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Address>43</harp:Address>
              <harp:PayloadType>S32</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="harp:CreateMessage">
                  <harp:MessageType>Write</harp:MessageType>
                  <harp:Address>42</harp:Address>
                  <harp:PayloadType>S32</harp:PayloadType>
                  <harp:Payload>0</harp:Payload>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>Commands</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>45</harp:Address>
                <harp:PayloadType>U16</harp:PayloadType>
                <harp:Payload>7583</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>44</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedS32</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>32</harp:Address>
          <harp:MessageType xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>U8</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:MouseMove" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>X</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Rescale">
            <dsp:Min>0</dsp:Min>
            <dsp:Max>2400</dsp:Max>
            <dsp:RangeMin>0</dsp:RangeMin>
            <dsp:RangeMax>120000</dsp:RangeMax>
            <dsp:RescaleType>Clamp</dsp:RescaleType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SampleInterval">
            <rx:Interval>PT0.05S</rx:Interval>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>GoToPosition</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D0</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>GoToPosition</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D1</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>160000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>GoToPosition</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>Timestamp</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>44</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedS32</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>160000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>